PsychoPy2experiment version="2020.1.2"
Settings
  Completed URL = $"https://delawarepsych.sona-systems.com/webstudy_credit.aspx?experiment_id=258&credit_token=607171114bb442a2933b1bfb90319717&survey_code=" + expInfo['participant']
  Experiment info = {'participant': '', 'Enter your sex': '', 'Enter your age': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1024, 768]
  color = $[1,1,1]
  expName = VSL_VWM_Py
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Routines
  Routine feedback
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        fixOpacity = 1;
        fbColor = "red";
        if ((nbackflags[(trial_1 - 1)] === 1)) {
            if ((key_resp.corr === 1)) {
                fbtext = "Correct!";
                fbColor = "green";
                hit = 1;
                miss = 0;
                FA = 0;
                CR = 0;
                fixOpacity=0;
            } else {
                fbtext = "Miss, press space when shapes repeat!";
                fixOpacity=0;
                hit = 0;
                miss = 1;
                FA = 0;
                CR = 0;
            }
        }
        if ((nbackflags[(trial_1 - 1)] === 0)) {
            if ((key_resp.corr === 1)) {
                fbtext = " ";
                fixOpacity=1;
                hit = 0;
                miss = 0;
                FA = 0;
                CR = 1;
            } else {
                fbtext = "False Alarm";
                fixOpacity=0;
                hit = 0;
                miss = 0;
                FA = 1;
                CR = 0;
            }
        }
      Begin Routine:
        ###Determine feedback prompt or ISI interval to be displayed.
        fixOpacity = 1;
        fbColor = "red";
        if nbackflags[trial_1-1] == 1:
            if key_resp.corr == 1:
                fbtext = 'Correct!'
                fbColor = "green";
                hit = 1
                miss = 0
                FA = 0
                CR = 0
                fix_size = [0,0]
                fixOpacity=0;

            else:
                fbtext = 'Miss'
                fixOpacity=0;
                fix_size = [0,0]
                hit = 0
                miss = 1
                FA = 0
                CR = 0

        if nbackflags[trial_1-1] == 0:
            if key_resp.corr == 1:
                fbtext = ' '
                fix_size = [15,15]
                hit = 0
                miss = 0
                FA = 0
                CR = 1
                fixOpacity=1;

            else:
                fbtext = 'False Alarm'
                fix_size = [0,0]
                hit = 0
                miss = 0
                FA = 1
                CR = 0
                fixOpacity=1;
      End JS Routine:
        psychoJS.experiment.addData("hit", hit);
        psychoJS.experiment.addData("miss", miss);
        psychoJS.experiment.addData("FA", FA);
        psychoJS.experiment.addData("CR", CR);
      End Routine:
        thisExp.addData('hit', hit)
        thisExp.addData('miss', miss)
        thisExp.addData('FA', FA)
        thisExp.addData('CR', CR)
    ImageComponent Fixation
      image = images/fixation.png
      opacity [set every repeat] = $fixOpacity
      size = [15,15]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = pix
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    TextComponent feedback_text
      color [set every repeat] = $fbColor
      letterHeight = 20
      startVal [time (s)] = .0
      stopVal [duration (s)] = .5
      text [set every repeat] = $fbtext
      wrapWidth = 100
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  Routine VSL_RSVP_stimuli
    CodeComponent PresImages
      Code Type = Auto->JS
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      Begin Experiment:
        trial_1 = 0
      Begin Routine:
        #counter
        trial_1 = trial_1 + 1

        #determine images to present
        # Matched pairs
        #trial_1-1? yes
        if stimorder[trial_1-1] == 1:
            image1 = Pair1[0]
        elif stimorder[trial_1-1] == 2:
            image1 = Pair1[1]
        elif stimorder[trial_1-1] == 3:
            image1 = Pair2[0]
        elif stimorder[trial_1-1] == 4:
            image1 = Pair2[1]
        elif stimorder[trial_1-1] == 5:
            image1 = Pair3[0]
        elif stimorder[trial_1-1] == 6:
            image1 = Pair3[1]
        elif stimorder[trial_1-1] == 7:
            image1 = Pair4[0]
        elif stimorder[trial_1-1] == 8:
            image1 = Pair4[1]
            #foil sets
        elif stimorder[trial_1-1] == 9:
            image1 = Random1[0]
        elif stimorder[trial_1-1] == 10:
            image1 = Random1[1]
        elif stimorder[trial_1-1] == 11:
            image1 = Random2[0]
        elif stimorder[trial_1-1] == 12:
            image1 = Random2[1]
        elif stimorder[trial_1-1] == 13:
            image1 = Random3[0]
        elif stimorder[trial_1-1] == 14:
            image1 = Random3[1]
        elif stimorder[trial_1-1] == 15:
            image1 = Random4[0]
        elif stimorder[trial_1-1] == 16:
            image1 = Random4[1]


        #Set correct answer.
        if nbackflags[trial_1-1] == 1:
            correctResp = 'space'
            nback = 1
        else:
            correctResp = 'None'
            nback = 0
      End Routine:
        #save out trial number
        thisExp.addData("trial_1",trial_1)
        thisExp.addData('image1', image1)
        thisExp.addData('nBack', nback)
        thisExp.addData('stimPres', stimorder[(trial_1 - 1)])
    ImageComponent VSL_1
      image [set every repeat] = $image1
      pos [set every repeat] = (0,0)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'space','None'
      correctAns = $correctResp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      storeCorrect = True
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  Routine Recognition_Task
    CodeComponent RecogPairAssignment
      Code Type = Auto->JS
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      Begin Routine:
        if Paired_random == 1:
            if Pair1leftitem == 1:
                recogitem1 = Pair1[0]
            elif Pair1leftitem == 3:
                recogitem1 = Pair2[0]
            elif Pair1leftitem == 5:
                recogitem1 = Pair3[0]
            elif Pair1leftitem == 7:
                recogitem1 = Pair4[0]
            if Pair1rightitem == 2:
                recogitem2 = Pair1[1]
            elif Pair1rightitem == 4:
                recogitem2 = Pair2[1]
            elif Pair1rightitem == 6:
                recogitem2 = Pair3[1]
            elif Pair1rightitem == 8:
                recogitem2 = Pair4[1]
                #determine second pair
            if Pair2leftitem == 1:
                recogitem3 = Pair1[0]
            elif Pair2leftitem == 3:
                recogitem3 = Pair2[0]
            elif Pair2leftitem == 5:
                recogitem3 = Pair3[0]
            elif Pair2leftitem == 7:
                recogitem3 = Pair4[0]
            if Pair2rightitem == 2:
                recogitem4 = Pair1[1]
            elif Pair2rightitem == 4:
                recogitem4 = Pair2[1]
            elif Pair2rightitem == 6:
                recogitem4 = Pair3[1]
            elif Pair2rightitem == 8:
                recogitem4 = Pair4[1]
        elif Paired_random == 2:
            if Pair1leftitem == 1:
                recogitem1 = Random1[0]
            elif Pair1leftitem == 3:
                recogitem1 = Random2[0]
            elif Pair1leftitem == 5:
                recogitem1 = Random3[0]
            elif Pair1leftitem == 7:
                recogitem1 = Random4[0]
            if Pair1rightitem == 2:
                recogitem2 = Random1[1]
            elif Pair1rightitem == 4:
                recogitem2 = Random2[1]
            elif Pair1rightitem == 6:
                recogitem2 = Random3[1]
            elif Pair1rightitem == 8:
                recogitem2 = Random4[1]
                #determine second pair
            if Pair2leftitem == 1:
                recogitem3 = Random1[0]
            elif Pair2leftitem == 3:
                recogitem3 = Random2[0]
            elif Pair2leftitem == 5:
                recogitem3 = Random3[0]
            elif Pair2leftitem == 7:
                recogitem3 = Random4[0]
            if Pair2rightitem == 2:
                recogitem4 = Random1[1]
            elif Pair2rightitem == 4:
                recogitem4 = Random2[1]
            elif Pair2rightitem == 6:
                recogitem4 = Random3[1]
            elif Pair2rightitem == 8:
                recogitem4 = Random4[1]
        if side == 1:
            recogloc1 = [-140,0]
            recogloc2 = [-70,0]
            recogloc3 = [70,0]
            recogloc4 = [140,0]
        elif side == 2:
            recogloc1 = [70,0]
            recogloc2 = [140,0]
            recogloc3 = [-140,0]
            recogloc4 = [-70,0]
    TextComponent Recognition_prompt
      color = black
      letterHeight = 20
      pos = (0, 200)
      startVal [time (s)] = 0.0
      text = Which of these pairs is more familiar?
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    ImageComponent fixation_3
      image = images/fixation.png
      size = (15,15)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Square1_3
      image = images/square.png
      pos [set every repeat] = $recogloc1
      size = (70,70)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Square2_3
      image = images/square.png
      pos [set every repeat] = $recogloc2
      size = (70,70)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Square3_3
      image = images/square.png
      pos [set every repeat] = $recogloc3
      size = (70,70)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Square4_3
      image = images/square.png
      pos [set every repeat] = $recogloc4
      size = (70,70)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Recogitem1
      image [set every repeat] = $recogitem1
      pos [set every repeat] = $recogloc1
      size = (66,66)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Recogitem2
      image [set every repeat] = $recogitem2
      pos [set every repeat] = $recogloc2
      size = (66,66)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Recogitem3
      image [set every repeat] = $recogitem3
      pos [set every repeat] = $recogloc3
      size = (66,66)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Recogitem4
      image [set every repeat] = $recogitem4
      pos [set every repeat] = $recogloc4
      size = (66,66)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent Recognition_response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VWM_Task
    CodeComponent PresentArray
      Code Type = Both
      Begin JS Routine:
        var shuffle = function (array) {
            var currentIndex = array.length;
            var temporaryValue, randomIndex;
            while (0 !== currentIndex) {
                randomIndex = Math.floor(Math.random() * currentIndex);
                currentIndex -= 1;
                temporaryValue = array[currentIndex];
                array[currentIndex] = array[randomIndex];
                array[randomIndex] = temporaryValue;
            }
            return array;
        };
        Locrandomizer = []; PairedBank = []; PairedSetRand = []; Pairloc1x=[]; Pairloc1y = 1; Pairloc2x=1;
        Pairloc2y = 1; Pairloc3x = 1; Pairloc3y= 1; Pairloc4x=1; Pairloc4y = 1;
        RandomBank = []; RandomSetRand=[]; VWMimage1=[]; VWMimage2 = [];
        VWMimage3=[]; VWMimage4=[]; VWMimage5=[]; VWMimage6=[]; VWMimage7=[];
        VWMimage8=[]; arrayorder=[]; image1loc=[]; image2loc=[]; image3loc = [];
        image4loc = []; image5loc =[]; image6loc =[];image7loc=[]; image8loc =[];
        stimlocx=[];stimlocy = [];
        stimtime1 = []; stimtime2 = [];
        Pairtime1_1 = [];Pairtime2_1 = [];Pairtime3_1 = [];Pairtime4_1 = [];
        Pairtime1_2 = [];Pairtime2_2 = [];Pairtime3_2 = [];Pairtime4_2 = [];
        if ((Stimulus_set === 1)) {
            if ((paired_random === 1)) {
                VWMimage1 = Pair1[0];
                VWMimage2 = Pair1[1];
                VWMimage3 = Pair2[0];
                VWMimage4 = Pair2[1];
                VWMimage5 = Pair3[0];
                VWMimage6 = Pair3[1];
                VWMimage7 = Pair4[0];
                VWMimage8 = Pair4[1];
            } else {
                if ((paired_random === 2)) {
                    VWMimage1 = Pair1[0];
                    VWMimage2 = Pair3[1];
                    VWMimage3 = Pair2[0];
                    VWMimage4 = Pair4[1];
                    VWMimage5 = Pair3[0];
                    VWMimage6 = Pair1[1];
                    VWMimage7 = Pair4[0];
                    VWMimage8 = Pair2[1];
                }
            }
        } else {
            if ((Stimulus_set === 2)) {
                if ((paired_random === 1)) {
                    VWMimage1 = Random1[0];
                    VWMimage2 = Random1[1];
                    VWMimage3 = Random2[0];
                    VWMimage4 = Random2[1];
                    VWMimage5 = Random3[0];
                    VWMimage6 = Random3[1];
                    VWMimage7 = Random4[0];
                    VWMimage8 = Random4[1];
                } else {
                    if ((paired_random === 2)) {
                        VWMimage1 = Random1[0];
                        VWMimage2 = Random3[1];
                        VWMimage3 = Random2[0];
                        VWMimage4 = Random4[1];
                        VWMimage5 = Random3[0];
                        VWMimage6 = Random1[1];
                        VWMimage7 = Random4[0];
                        VWMimage8 = Random2[1];
                    }
                }
            }
        }
        PairedBank = [Pair1[0], Pair1[1], Pair2[0], Pair2[1], Pair3[0], Pair3[1], Pair4[0], Pair4[1]];
        RandomBank = [Random1[0], Random1[1], Random2[0], Random2[1], Random3[0], Random3[1], Random4[0], Random4[1]];
        PairedSetRand = [Pair1[0], Pair3[1], Pair2[0], Pair4[1], Pair3[0], Pair1[1], Pair4[0], Pair2[1]];
        RandomSetRand = [Random1[0], Random3[1], Random2[0], Random4[1], Random3[0], Random1[1], Random4[0], Random2[1]];
        stimtime1 = [1, 2, 3, 4];
        stimtime2 = [1.5, 2.5, 3.5, 4.5];
        stimlocx = [(- 210), (- 70), 70, 210];
        stimlocy = [0, 0, 0, 0];
        Locrandomizer = shuffle([0, 1, 2, 3]);
        arrayorder = [];
        for (var idx = 0, _pj_a = Locrandomizer.length; (idx < _pj_a); idx += 1) {
            if ((Locrandomizer[idx] === 0)) {
                Pairloc1x = stimlocx[idx];
                Pairloc1y = stimlocy[idx];
                Pairtime1_1 = stimtime1[idx];
                Pairtime1_2 = stimtime2[idx];
                arrayorder.push(1);
                arrayorder.push(2);
            }
            if ((Locrandomizer[idx] === 1)) {
                Pairloc2x = stimlocx[idx];
                Pairloc2y = stimlocy[idx];
                Pairtime2_1 = stimtime1[idx];
                Pairtime2_2 = stimtime2[idx];
                arrayorder.push(3);
                arrayorder.push(4);
            }
            if ((Locrandomizer[idx] === 2)) {
                Pairloc3x = stimlocx[idx];
                Pairloc3y = stimlocy[idx];
                Pairtime3_1 = stimtime1[idx];
                Pairtime3_2 = stimtime2[idx];
                arrayorder.push(5);
                arrayorder.push(6);
            }
            if ((Locrandomizer[idx] === 3)) {
                Pairloc4x = stimlocx[idx];
                Pairloc4y = stimlocy[idx];
                Pairtime4_1 = stimtime1[idx];
                Pairtime4_2 = stimtime2[idx];
                arrayorder.push(7);
                arrayorder.push(8);
            }
        }
        image1loc = [(Pairloc1x - 35), Pairloc1y];
        image2loc = [(Pairloc1x + 35), Pairloc1y];
        image3loc = [(Pairloc2x - 35), Pairloc2y];
        image4loc = [(Pairloc2x + 35), Pairloc2y];
        image5loc = [(Pairloc3x - 35), Pairloc3y];
        image6loc = [(Pairloc3x + 35), Pairloc3y];
        image7loc = [(Pairloc4x - 35), Pairloc4y];
        image8loc = [(Pairloc4x + 35), Pairloc4y];
      Begin Routine:
        ##### determine images to present
        import numpy
        import random
        if Stimulus_set == 1:
            if paired_random == 1:
                #pair1
                VWMimage1 = Pair1[0]
                VWMimage2 = Pair1[1]
                #pair2
                VWMimage3 = Pair2[0]
                VWMimage4 = Pair2[1]
                #pair3
                VWMimage5 = Pair3[0]
                VWMimage6 = Pair3[1]
                #pair4
                VWMimage7 = Pair4[0]
                VWMimage8 = Pair4[1]
            elif paired_random == 2:
                VWMimage1 = Pair1[0]
                VWMimage2 = Pair3[1]
                VWMimage3 = Pair2[0]
                VWMimage4 = Pair4[1]
                VWMimage5 = Pair3[0]
                VWMimage6 = Pair1[1]
                VWMimage7 = Pair4[0]
                VWMimage8 = Pair2[1]
        elif Stimulus_set == 2:
            if paired_random == 1:
                VWMimage1 = Random1[0]
                VWMimage2 = Random1[1]
                VWMimage3 = Random2[0]
                VWMimage4 = Random2[1]
                VWMimage5 = Random3[0]
                VWMimage6 = Random3[1]
                VWMimage7 = Random4[0]
                VWMimage8 = Random4[1]
            elif paired_random == 2:
                VWMimage1 = Random1[0]
                VWMimage2 = Random3[1]
                VWMimage3 = Random2[0]
                VWMimage4 = Random4[1]
                VWMimage5 = Random3[0]
                VWMimage6 = Random1[1]
                VWMimage7 = Random4[0]
                VWMimage8 = Random2[1]

        PairedBank = [Pair1[0],Pair1[1],Pair2[0],Pair2[1],Pair3[0],Pair3[1],Pair4[0],Pair4[1]]
        RandomBank = [Random1[0],Random1[1],Random2[0],Random2[1],Random3[0],Random3[1],Random4[0],Random4[1]]

        PairedSetRand = [Pair1[0],Pair3[1],Pair2[0],Pair4[1],Pair3[0],Pair1[1],Pair4[0],Pair2[1]]
        RandomSetRand = [Random1[0],Random3[1],Random2[0],Random4[1],Random3[0],Random1[1],Random4[0],Random2[1]]
        #set location variables
        stimtime1 = [1,2,3,4]
        stimtime2 = [1.5,2.5,3.5,4.5]
        stimlocx = [-210,-70,70,210]
        stimlocy = [0,0,0,0]

        Locrandomizer = numpy.random.permutation(4)
        #[pair in loc1, pair in loc2, pair in loc3, pairinloc4]
        arrayorder = [] #returns list of VVWMimages in order from left to right
        for idx in (range(len(Locrandomizer))):
            if Locrandomizer[idx] == 0:
                Pairloc1x = stimlocx[idx]
                Pairloc1y = stimlocy[idx]
                Pairtime1_1 = stimtime1[idx]
                Pairtime1_2 = stimtime2[idx]
                arrayorder.append(1)
                arrayorder.append(2)
            if Locrandomizer[idx] == 1:
                Pairloc2x =stimlocx[idx]
                Pairloc2y =stimlocy[idx]
                Pairtime2_1 = stimtime1[idx]
                Pairtime2_2 = stimtime2[idx]
                arrayorder.append(3)
                arrayorder.append(4)
            if Locrandomizer[idx] == 2:
                Pairloc3x =stimlocx[idx]
                Pairloc3y =stimlocy[idx]
                Pairtime3_1 = stimtime1[idx]
                Pairtime3_2 = stimtime2[idx]
                arrayorder.append(5)
                arrayorder.append(6)
            if Locrandomizer[idx] == 3:
                Pairloc4x =stimlocx[idx]
                Pairloc4y =stimlocy[idx]
                Pairtime4_1 = stimtime1[idx]
                Pairtime4_2 = stimtime2[idx]
                arrayorder.append(7)
                arrayorder.append(8)

        image1loc = [Pairloc1x-35, Pairloc1y]
        image2loc = [Pairloc1x+35, Pairloc1y]
        image3loc = [Pairloc2x-35, Pairloc2y]
        image4loc = [Pairloc2x+35, Pairloc2y]
        image5loc = [Pairloc3x-35, Pairloc3y]
        image6loc = [Pairloc3x+35, Pairloc3y]
        image7loc = [Pairloc4x-35, Pairloc4y]
        image8loc = [Pairloc4x+35, Pairloc4y]
    ImageComponent Square1_4
      image = images/square.png
      pos = (-245, 0)
      size = (70,70)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Square2_4
      image = images/square.png
      pos = (-175,0)
      size = (70,70)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Square3_4
      image = images/square.png
      pos = (-105,0)
      size = (70,70)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Square4_4
      image = images/square.png
      pos = (-35,0)
      size = (70,70)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Square5_4
      image = images/square.png
      pos = (35,0)
      size = (70,70)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Square6_4
      image = images/square.png
      pos = (105,0)
      size = (70,70)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Square7_4
      image = images/square.png
      pos = (175,0)
      size = (70,70)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Square8_4
      image = images/square.png
      pos = (245,0)
      size = (70,70)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Image1
      image [set every repeat] = $VWMimage1
      pos [set every repeat] = $image1loc
      size = (66,66)
      startVal [time (s)] = $Pairtime1_1
      stopVal [duration (s)] = .5
      units = pix
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    ImageComponent Image2
      image [set every repeat] = $VWMimage2
      pos [set every repeat] = $image2loc
      size = (66,66)
      startVal [time (s)] = $Pairtime1_2
      stopVal [duration (s)] = .5
      units = pix
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    ImageComponent Image3
      image [set every repeat] = $VWMimage3
      pos [set every repeat] = $image3loc
      size = (66,66)
      startVal [time (s)] = $Pairtime2_1
      stopVal [duration (s)] = .5
      units = pix
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    ImageComponent Image4
      image [set every repeat] = $VWMimage4
      pos [set every repeat] = $image4loc
      size = (66,66)
      startVal [time (s)] = $Pairtime2_2
      stopVal [duration (s)] = .5
      units = pix
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    ImageComponent Image5
      image [set every repeat] = $VWMimage5
      pos [set every repeat] = $image5loc
      size = (66,66)
      startVal [time (s)] = $Pairtime3_1
      stopVal [duration (s)] = .5
      units = pix
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    ImageComponent Image6
      image [set every repeat] = $VWMimage6
      pos [set every repeat] = $image6loc
      size = (66,66)
      startVal [time (s)] = $Pairtime3_2
      stopVal [duration (s)] = .5
      units = pix
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    ImageComponent Image7
      image [set every repeat] = $VWMimage7
      pos [set every repeat] = $image7loc
      size = (66,66)
      startVal [time (s)] = $Pairtime4_1
      stopVal [duration (s)] = .5
      units = pix
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    ImageComponent Image8
      image [set every repeat] = $VWMimage8
      pos [set every repeat] = $image8loc
      size = (66,66)
      startVal [time (s)] = $Pairtime4_2
      stopVal [duration (s)] = .5
      units = pix
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    CodeComponent Cue_loc
      Code Type = Auto->JS
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      Begin Routine:
        if responsepos == 1:
            Cueloc = [-245,0]
        elif responsepos == 2:
            Cueloc = [-175,0]
        elif responsepos == 3:
            Cueloc = [-105,0]
        elif responsepos == 4:
            Cueloc = [-35,0]
        elif responsepos == 5:
            Cueloc = [35,0]
        elif responsepos == 6:
            Cueloc = [105,0]
        elif responsepos == 7:
            Cueloc = [175,0]
        elif responsepos == 8:
            Cueloc = [245,0]
    ImageComponent CueSq
      image = images/greensq.png
      pos [set every repeat] = $Cueloc
      size = (70,70)
      startVal [time (s)] = 6.0
      units = pix
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    CodeComponent ResponseShapes
      Code Type = Auto->JS
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      Begin Routine:
        if Stimulus_set == 1:
            responseset = Pair1 + Pair2 + Pair3 + Pair4
        elif Stimulus_set == 2:
            responseset = Random1 + Random2 + Random3 + Random4
        random.shuffle(responseset)



        responseImage1 = responseset[0]
        responseImage2 = responseset[1]
        responseImage3 = responseset[2]
        responseImage4 = responseset[3]
        responseImage5 = responseset[4]
        responseImage6 = responseset[5]
        responseImage7 = responseset[6]
        responseImage8 = responseset[7]
    ImageComponent response1
      image [set every repeat] = $responseImage1
      pos = (-245, 210)
      size = (69,69)
      startVal [time (s)] = 7
      units = pix
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    ImageComponent response2
      image [set every repeat] = $responseImage2
      pos = (-175, 210)
      size = (69,69)
      startVal [time (s)] = 7
      units = pix
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    ImageComponent response3
      image [set every repeat] = $responseImage3
      pos = (-105, 210)
      size = (69,69)
      startVal [time (s)] = 7
      units = pix
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    ImageComponent response4
      image [set every repeat] = $responseImage4
      pos = (-35, 210)
      size = (69,69)
      startVal [time (s)] = 7
      units = pix
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    ImageComponent response5
      image [set every repeat] = $responseImage5
      pos = (35, 210)
      size = (69,69)
      startVal [time (s)] = 7
      units = pix
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    ImageComponent response6
      image [set every repeat] = $responseImage6
      pos = (105, 210)
      size = (69,69)
      startVal [time (s)] = 7
      units = pix
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    ImageComponent response7
      image [set every repeat] = $responseImage7
      pos = (175, 210)
      size = (69,69)
      startVal [time (s)] = 7
      units = pix
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    ImageComponent response8
      image [set every repeat] = $responseImage8
      pos = (245, 210)
      size = (69,69)
      startVal [time (s)] = 7
      units = pix
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    TextComponent resp_label_1
      color = black
      letterHeight = 20
      pos = (-245, 260)
      startVal [time (s)] = 7
      text = 1
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    TextComponent resp_label_2
      color = black
      letterHeight = 20
      pos = (-175,260)
      startVal [time (s)] = 7
      text = 2
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    TextComponent resp_label_3
      color = black
      letterHeight = 20
      pos = (-105, 260)
      startVal [time (s)] = 7
      text = 3
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    TextComponent resp_label_4
      color = black
      letterHeight = 20
      pos = (-35,260)
      startVal [time (s)] = 7
      text = 4
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    TextComponent resp_label_5
      color = black
      letterHeight = 20
      pos = (35, 260)
      startVal [time (s)] = 7
      text = 5
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    TextComponent resp_label_6
      color = black
      letterHeight = 20
      pos = (105,260)
      startVal [time (s)] = 7
      text = 6
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    TextComponent resp_label_7
      color = black
      letterHeight = 20
      pos = (175,260)
      startVal [time (s)] = 7
      text = 7
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    TextComponent resp_label_8
      color = black
      letterHeight = 20
      pos = (245,260)
      startVal [time (s)] = 7
      text = 8
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    KeyboardComponent VWM_Response
      allowedKeys = '1','2','3','4','5','6','7','8'
      forceEndRoutine = True
      startVal [time (s)] = 7
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  Routine VSL_Instructions
    CodeComponent LoadImages
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import array

        # create image bank for VSL Images
        VSL_imageList = []

        for i in range(16):
            VSL_imageList.append('images/VSL' + str(i) + '.jpg')

        # randomize bank
        VSL_imageList = random.sample(VSL_imageList, len(VSL_imageList))

        # create the pairs from the randomized bank
        Pair1 = VSL_imageList[:2]                                     # 0-1
        Pair2 = VSL_imageList[2:4]         # 2-3
        Pair3 = VSL_imageList[4:6]          # 4-5
        Pair4 = VSL_imageList[6:8]       # 6-7
        Random1 = VSL_imageList[8:10]                                     # 8-9
        Random2 = VSL_imageList[10:12]         # 10-11
        Random3 = VSL_imageList[12:14]         # 12-13
        Random4 = VSL_imageList[14:16]       # 14-15
        Pair_List = Pair1 + Pair2 + Pair3 + Pair4 + Random1 + Random2 + Random3 + Random4

        # 2 different categories for pairs
        PairedSets = Pair1 + Pair2 + Pair3 + Pair4
        RandomSets = Random1 + Random2 + Random3 + Random4
    CodeComponent FamiliarizationSequence
      Code Type = Auto->JS
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      Begin Routine:
        import random
        import numpy
        finished = 0
        while finished == 0:
            finished = 1
            tripletpool = [1, 1, 1, 1, 2, 2, 2, 2, 3, 3, 3, 3, 4, 4, 4, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20]*10
            referencelist = numpy.arange(0, 320).tolist()
            tripletorder = []
            for idx in range(len(tripletpool)):
                for rejections in range(1001):
                    thissamp = random.sample(referencelist,1)
                    thissamp = thissamp[0]
                    thispair = tripletpool[thissamp]
                    if idx > 0:
                        if tripletorder[idx-1] != thispair:
                            if idx <= 3:
                                tripletorder.append(thispair)
                                referencelist.remove(thissamp)# %remove item from reference list
                                break
                            else:
                                if (tripletorder[idx-3] != tripletorder[idx-1]) or (tripletorder[idx-2] != thispair):
                                    tripletorder.append(thispair)
                                    referencelist.remove(thissamp)
                                    break
                    else:
                        tripletorder.append(thispair)
                        referencelist.remove(thissamp)
                        break
                if rejections == 1000:
                    finished = 0
                    break
        #create triplet order with nback trials and flags
        nbackindex = numpy.ones(320)
        nbackindex[:60] = 0 #sixty nback responses
        numpy.random.shuffle(nbackindex)

        stimorder = []
        nbackflags = []
        for idx in range(len(tripletorder)):
            if tripletorder[idx] == 1:
                stimorder.append(1) #only second stim
                stimorder.append(2) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(2) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] == 2:
                stimorder.append(3) #only second stim
                stimorder.append(4) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(4) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==3:
                stimorder.append(5) #only second stim
                stimorder.append(6) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(6) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==4:
                stimorder.append(7) #only second stim
                stimorder.append(8) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(8) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==5:
                stimorder.append(9) #only second stim
                stimorder.append(10) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(10) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==6:
                stimorder.append(9) #only second stim
                stimorder.append(12) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(12) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==7:
                stimorder.append(9) #only second stim
                stimorder.append(14) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(14) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==8:
                stimorder.append(9) #only second stim
                stimorder.append(16) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(16) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==9:
                stimorder.append(11) #only second stim
                stimorder.append(10) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(10) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==10:
                stimorder.append(11) #only second stim
                stimorder.append(12) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(12) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==11:
                stimorder.append(11) #only second stim
                stimorder.append(14) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(14) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==12:
                stimorder.append(11) #only second stim
                stimorder.append(16) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(16) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==13:
                stimorder.append(13) #only second stim
                stimorder.append(10) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(10) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==14:
                stimorder.append(13) #only second stim
                stimorder.append(12) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(12) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==15:
                stimorder.append(13) #only second stim
                stimorder.append(14) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(14) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==16:
                stimorder.append(13) #only second stim
                stimorder.append(16) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(16) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==17:
                stimorder.append(15) #only second stim
                stimorder.append(10) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(10) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==18:
                stimorder.append(15) #only second stim
                stimorder.append(12) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(12) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==19:
                stimorder.append(15) #only second stim
                stimorder.append(14) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(14) #only second stim
                    nbackflags.append(1)
            elif tripletorder[idx] ==20:
                stimorder.append(15) #only second stim
                stimorder.append(16) #only second stim
                nbackflags.append(0)
                nbackflags.append(0)
                if nbackindex[idx] == 0:
                    stimorder.append(16) #only second stim
                    nbackflags.append(1)

        print(len(stimorder))
        print(len(nbackflags))
    TextComponent Instruction_1
      color = black
      letterHeight = 20
      startVal [time (s)] = 0.0
      wrapWidth = 500
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      text:
        You will now watch a movie consisting of a series of shapes.
        Pay attention to the shapes presented.
        Whenever one of the shapes appears twice in a row, press the space bar.
        You will recieve feedback to your responses of correct, miss, or false alarm.
        Please respond as accurately as possible.
        Press space to begin.
    KeyboardComponent Instruct_response_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Recognition_Instructions
    TextComponent Instruct_2
      color = black
      letterHeight = 20
      startVal [time (s)] = 0.0
      wrapWidth = 500
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      text:
        You will now be performing a recognition task. You will be presented with two sets of shapes at a time. In this task you will indicate which of the two sets of shapes is more familiar to you based on the previous task. Using the left and right arrow keys, select whichever pair of the two is more familiar to you on each trial.
        Press the spacebar to begin.
    KeyboardComponent Instruct_response_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine VWM_Instructions
    TextComponent Instruct_3
      color = black
      letterHeight = 20
      startVal [time (s)] = 0.0
      wrapWidth = 500
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      text:
        You will now perform a memory task. On each trial you will be presented with an array of eight shapes. Do your best to remember all of the shapes and their locations. After the shapes disappear, you will be asked to report which shape was in a cued location. One of the locations in the array will be highlighted with a green square. Using the number keys at the top of the keyboard, select whichever shape appeared in the location of the green square from the list of shapes that appears above the array. This task is meant to be difficult so please try your best and do not get discouraged.
        Press the spacebar to begin the task.
    KeyboardComponent Instruct_Response_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine VWM_feedback
    CodeComponent Decode_response
      Code Type = Both
      Begin JS Routine:
        if ((Stimulus_set === 1)) {
            if ((paired_random === 1)) {
                if ((responseset[(Number.parseInt(VWM_Response.keys[0]) - 1)] === PairedSets[(arrayorder[(responsepos - 1)] - 1)])) {
                    VWMFeedbackprompt = "Correct!";
                    accurate = 1;
                } else {
                    VWMFeedbackprompt = "Incorrect";
                    accurate = 0;
                }
            }
            if ((paired_random === 2)) {
                if ((responseset[(Number.parseInt(VWM_Response.keys[0]) - 1)] === PairedSetRand[(arrayorder[(responsepos - 1)] - 1)])) {
                    VWMFeedbackprompt = "Correct!";
                    accurate = 1;
                } else {
                    VWMFeedbackprompt = "Incorrect";
                    accurate = 0;
                }
            }
        }
        if ((Stimulus_set === 2)) {
            if ((paired_random === 1)) {
                if ((responseset[(Number.parseInt(VWM_Response.keys[0]) - 1)] === RandomSets[(arrayorder[(responsepos - 1)] - 1)])) {
                    VWMFeedbackprompt = "Correct!";
                    accurate = 1;
                } else {
                    VWMFeedbackprompt = "Incorrect";
                    accurate = 0;
                }
            }
            if ((paired_random === 2)) {
                if ((responseset[(Number.parseInt(VWM_Response.keys[0]) - 1)] === RandomSetRand[(arrayorder[(responsepos - 1)] - 1)])) {
                    VWMFeedbackprompt = "Correct!";
                    accurate = 1;
                } else {
                    VWMFeedbackprompt = "Incorrect";
                    accurate = 0;
                }
            }
        }
      Begin Routine:
        ####determine shape at answer loc and response loc
        #if object at target loc is same object as the response in displayset
        if Stimulus_set == 1:
            if paired_random == 1:
                if responseset[int(VWM_Response.keys[0])-1] == PairedSets[arrayorder[responsepos-1]-1]:
                    VWMFeedbackprompt = 'Correct!'
                    accurate = 1
                else:
                    VWMFeedbackprompt = 'Incorrect'
                    accurate = 0

            if paired_random == 2:
                if responseset[int(VWM_Response.keys[0])-1] == PairedSetRand[arrayorder[responsepos-1]-1]:
                    VWMFeedbackprompt = 'Correct!'
                    accurate = 1
                else:
                    VWMFeedbackprompt = 'Incorrect'
                    accurate = 0

        if Stimulus_set == 2:
            if paired_random == 1:
                if responseset[int(VWM_Response.keys[0])-1] == RandomSets[arrayorder[responsepos-1]-1]:
                    VWMFeedbackprompt = 'Correct!'
                    accurate = 1
                else:
                    VWMFeedbackprompt = 'Incorrect'
                    accurate = 0

            if paired_random == 2:
                if responseset[int(VWM_Response.keys[0])-1] == RandomSetRand[arrayorder[responsepos-1]-1]:
                    VWMFeedbackprompt = 'Correct!'
                    accurate = 1
                else:
                    VWMFeedbackprompt = 'Incorrect'
                    accurate = 0
      End JS Routine:
        psychoJS.experiment.addData("accurate", accurate);
      End Routine:
        thisExp.addData('accurate', accurate)
    TextComponent VWMFeedbackText
      color = black
      letterHeight = 20
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $VWMFeedbackprompt
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  Routine intro
    TextComponent intro_text
      color = black
      letterHeight = 25
      startVal [time (s)] = 0.0
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      text:
        This experiment REQUIRES a computer, with a keyboard..

        A tablet or phone will not work.

        Please maximize the browser window so that you see all the stimuli.

        On the next screen you will see the consent form. Please read it and press y to agree or escape key to quit the experiment.

        Press the space bar..
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent
    ImageComponent consent_form
      image = images/consent.jpg
      saveStartStop = False
      size = (510, 660)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'y'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Recognition_Pause
    ImageComponent fixation_pause
      image = images/fixation.png
      size = (15,15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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  Routine Break
    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if not trial_1 in [175,350,525]:
            continueRoutine = False
    TextComponent BreakText
      color = black
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        You may now take a 2-3 minute break.
        Please do not get up from your computer
        or view other screens during the break.
        You may close your eyes if you wish.
        When you are ready to continue press the C key.
    KeyboardComponent BreakResp
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine consent
  Routine VSL_Instructions
  LoopInitiator trials_1 loopType="TrialHandler"
    loopType = random
    nReps = 700
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    Routine VSL_RSVP_stimuli
    Routine feedback
    Routine Break
  LoopTerminator trials_1
  Routine VWM_Instructions
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = VWM_trial_conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('Stimulus_set', 1), ('paired_random', 1), ('response_locationx', -50), ('response_locationy', 200), ('responsepos', 1)]),
      OrderedDict([('Stimulus_set', 1), ('paired_random', 1), ('response_locationx', 50), ('response_locationy', 200), ('responsepos', 2)]),
      OrderedDict([('Stimulus_set', 1), ('paired_random', 1), ('response_locationx', -250), ('response_locationy', 0), ('responsepos', 3)]),
      OrderedDict([('Stimulus_set', 1), ('paired_random', 1), ('response_locationx', -150), ('response_locationy', 0), ('responsepos', 4)]),
      OrderedDict([('Stimulus_set', 1), ('paired_random', 1), ('response_locationx', 150), ('response_locationy', 0), ('responsepos', 5)]),
      OrderedDict([('Stimulus_set', 1), ('paired_random', 1), ('response_locationx', 250), ('response_locationy', 0), ('responsepos', 6)]),
      OrderedDict([('Stimulus_set', 1), ('paired_random', 1), ('response_locationx', -50), ('response_locationy', -200), ('responsepos', 7)]),
      OrderedDict([('Stimulus_set', 1), ('paired_random', 1), ('response_locationx', 50), ('response_locationy', -200), ('responsepos', 8)]),
      OrderedDict([('Stimulus_set', 1), ('paired_random', 2), ('response_locationx', -50), ('response_locationy', 200), ('responsepos', 1)]),
      OrderedDict([('Stimulus_set', 1), ('paired_random', 2), ('response_locationx', 50), ('response_locationy', 200), ('responsepos', 2)]),
      OrderedDict([('Stimulus_set', 1), ('paired_random', 2), ('response_locationx', -250), ('response_locationy', 0), ('responsepos', 3)])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
    Routine VWM_Task
    Routine VWM_feedback
  LoopTerminator trials_3
